PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '999'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = construal_level_task
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Routines
  Routine instructions
    TextComponent instruction_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        Instruction text.
        How to perform task.
  Routine action
    TextComponent attention_check
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $attention_check_text
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    TextComponent action_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $action
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    RatingScaleComponent attention_check_rating
      customize_everything = choices = ['not at all often','somewhat often','moderately often','very often','extremely often'], stretch=2.0, textSize=0.5, showAccept=False, maxTime=5, respKeys=['1','2','3','4','5']
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
      stopVal [condition] = 5
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  Routine cue
    TextComponent cue_str
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $cue_text
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  Routine scenario_cue
    TextComponent scenario_cue_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $cue_text
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  Routine scenario
    TextComponent scenario_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      text [set every repeat] = $scenarios
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  Routine quitting_intention
    TextComponent quitting_intention_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = To what extent do these thoughts encourage or discourage you to smoke?
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    RatingScaleComponent quitting_intention_rating
      customize_everything = choices = ['encourage a great deal','encourage a little','neither encourage nor discourage','discourage a little','discourage a great deal'], stretch=2.0, textSize=0.5, showAccept=False, maxTime=5, respKeys=['1','2','3','4','5']
      forceEndRoutine = False
      pos = 0, -0.4
      saveStartStop = False
      singleClick = True
      size = 1.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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Flow
  Routine instructions
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = choose_condition.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condition_type', 'present'), ('scenario_file', 'present_scenario_conditions.csv'), ('cue_text', 'Please imagine the next events occurring RIGHT NOW'), ('attention_check_text', 'How likely would you engage in this action right now?')]),
      OrderedDict([('condition_type', 'present'), ('scenario_file', 'present_scenario_conditions.csv'), ('cue_text', 'Please imagine the next events occurring RIGHT NOW'), ('attention_check_text', 'How likely would you engage in this action right now?')]),
      OrderedDict([('condition_type', 'present'), ('scenario_file', 'present_scenario_conditions.csv'), ('cue_text', 'Please imagine the next events occurring RIGHT NOW'), ('attention_check_text', 'How likely would you engage in this action right now?')]),
      OrderedDict([('condition_type', 'present'), ('scenario_file', 'present_scenario_conditions.csv'), ('cue_text', 'Please imagine the next events occurring RIGHT NOW'), ('attention_check_text', 'How likely would you engage in this action right now?')]),
      OrderedDict([('condition_type', 'future'), ('scenario_file', 'future_scenario_conditions.csv'), ('cue_text', 'Please imagine the next events occurring FIVE YEARS FROM NOW'), ('attention_check_text', 'How likely would you engage in this action five years from now?')])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
    LoopInitiator scenario_trials loopType="TrialHandler"
      Selected rows = $random(1) * 16
      conditionsFile = $scenario_file
      loopType = sequential
      nReps = 1
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      LoopInitiator action_trials loopType="TrialHandler"
        Selected rows = $random(3)*48 
        conditionsFile = action_conditions.csv
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('action', 'Grocery shopping')]),
          OrderedDict([('action', 'Driving a car')]),
          OrderedDict([('action', 'Reading a book')]),
          OrderedDict([('action', 'Going on vacation')]),
          OrderedDict([('action', 'Having lunch with a friend')]),
          OrderedDict([('action', 'Buying a car')]),
          OrderedDict([('action', 'Riding in an airplane')]),
          OrderedDict([('action', 'Calling a relative')]),
          OrderedDict([('action', 'Taking a shower')]),
          OrderedDict([('action', 'Going to the gym')]),
          OrderedDict([('action', 'Getting a haircut')]),
          OrderedDict([('action', 'A job interview')]),
          OrderedDict([('action', 'Attending a wedding')]),
          OrderedDict([('action', 'Playing cards')]),
          OrderedDict([('action', 'Making dinner')]),
          OrderedDict([('action', 'Buying coffee')]),
          OrderedDict([('action', 'Writing a letter')]),
          OrderedDict([('action', 'Cashing a check')]),
          OrderedDict([('action', 'Using an ATM')]),
          OrderedDict([('action', 'Doing laundry')]),
          OrderedDict([('action', 'Cleaning your room')]),
          OrderedDict([('action', 'Washing dishes')]),
          OrderedDict([('action', 'Throwing a ball')]),
          OrderedDict([('action', 'Hosting a party')]),
          OrderedDict([('action', 'Composing an email')]),
          OrderedDict([('action', 'Attending a party')]),
          OrderedDict([('action', 'Going shopping')]),
          OrderedDict([('action', 'Sending a text')]),
          OrderedDict([('action', 'Listening to music')]),
          OrderedDict([('action', 'Reading a newspaper')]),
          OrderedDict([('action', 'Riding a bike')]),
          OrderedDict([('action', 'Going for a walk')]),
          OrderedDict([('action', 'Walking a dog')])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
        Routine cue
        Routine action
      LoopTerminator action_trials
      Routine scenario_cue
      Routine scenario
      Routine quitting_intention
    LoopTerminator scenario_trials
  LoopTerminator block
